CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<HF>.{2,6})_(?P<Sample>.*)_(?P<Number>.*)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Experiment>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Color
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Color
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:1
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    Image name:Blue

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Blue
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:Blue
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:8|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedBlue
    Image or measurement?:Image
    Select the first image:CorrBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:9|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
    Select the input image:InvertedBlue
    Name the output image:RescaleBlue
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:RescaleBlue
    Name the output image:EnhBlue
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:EnhBlue
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.3
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Blue, CorrBlue, EnhBlue, InvertedBlue, RescaleBlue
    Select objects to measure:Cells

MeasureImageIntensity:[module_num:13|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
    Select images to measure:Blue, CorrBlue, EnhBlue, InvertedBlue, RescaleBlue
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

Threshold:[module_num:15|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
    Select the input image:InvertedBlue
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.43,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureImageAreaOccupied:[module_num:16|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:Threshold
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|OneDrive\\Documentos\\Charité\\Master Thesis\\By process
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:UPTAKEHF_
    Overwrite existing files without warning?:No
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